PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = bci_circle
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine pre_block
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    TextComponent text_pre_block
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press any key to start ...
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    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_pre_block
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Create LSL Stream
        info = StreamInfo(name='paradigm',type='Markers',channel_count=1,channel_format='string')

        # Create output channel to send markers
        outlet=StreamOutlet(info)

        # Send a marker "start_block"
        outlet.push_sample(x=["start_block"])
      Begin Routine:
        outlet.push_sample(x=["pre_run"])
  Routine wait_screen
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    TextComponent text_wait_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine MI
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    PolygonComponent move_circle
      fillColor = $(0.9216, 0.9216, 0.9216)
      shape = circle
      size [set every frame] = $move_circle.size
      startVal [time (s)] = 0.0
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    PolygonComponent mi_circle
      lineColor = $(1.0000, -1.0000, -1.0000)
      lineWidth = 7
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    CodeComponent code_circle
      Code Type = Auto->JS
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      Begin Experiment:
        move_circle.size = [0.4, 0.4]
        image_opacity = 0
      Begin Routine:
        shrunk_cycle_complete = False
        circle_growing = False

        pause_marker_sent = False
        class_marker_sent = False
      Each Frame:
        # move_circle is growing
        if circle_growing:
            move_circle.size += 0.001

            # move_circle reached its max size
            if (move_circle.size >= [0.4, 0.4]).all():
                move_circle.size = [0.4, 0.4]
                circle_growing = False

                # full cycle is complete
                if shrunk_cycle_complete:
                    continueRoutine = False

            # Fade OUT starts
            elif (move_circle.size >= [0.15, 0.15]).all():
                if not pause_marker_sent:
                    outlet.push_sample(x=["pause"])
                    pause_marker_sent = True

                image_opacity -= 0.0020
        else:
            # Fade IN starts
            move_circle.size -= 0.001
            image_opacity += 0.0020

            # move_cirlce reached its min size
            if (move_circle.size <= [0.0, 0.0]).all():
                move_circle.size = [0.0, 0.0]
                circle_growing = True
                shrunk_cycle_complete = True

                # reset pause marker for the next growing phase
                pause_marker_sent = False

            # Fade IN ends / MI starts
            elif (move_circle.size <= [0.15, 0.15]).all():
                if not class_marker_sent:
                    outlet.push_sample(x=[class_mi])
                    class_marker_sent = True

                image_opacity = 0.5
    ImageComponent image_mi
      image [set every repeat] = $pic_name
      opacity [set every frame] = image_opacity
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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  Routine run_break
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    TextComponent text_run_break
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Trial finished!
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine post_block
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    TextComponent text_post_run
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Run finished. Yupii!!
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    KeyboardComponent key_resp_end
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["post_block"])
  Routine circle
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Flow
  Routine pre_block
  LoopInitiator run loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine wait_screen
    LoopInitiator trial loopType="TrialHandler"
      conditionsFile = classes.csv
      loopType = fullRandom
      nReps = 10
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      conditions:
        [OrderedDict([('pic_name', 'pics/left_hand.JPG'), ('class_mi', 'left_hand')]),
        OrderedDict([('pic_name', 'pics/feet.JPG'), ('class_mi', 'feet')]),
        OrderedDict([('pic_name', 'pics/none.JPG'), ('class_mi', 'rest')]),
        OrderedDict([('pic_name', 'pics/right_hand.JPG'), ('class_mi', ' right_hand')])]
      Routine MI
    LoopTerminator trial
    Routine run_break
  LoopTerminator run
  Routine post_block
