PsychoPy2experiment version="2024.1.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = online_paradigm
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine pre_block
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    TextComponent text_pre_block
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press space to start online measurement
    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_pre_block
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet, resolve_byprop, StreamInlet
        import numpy as np
        info = StreamInfo(name='paradigm',type='Markers',channel_count=1,channel_format='string')
        outlet=StreamOutlet(info)
        print("looking for a classifier stream...")
        streams = resolve_byprop('name', 'ClassifierOutput', timeout=10)
        inlet_classifier = StreamInlet(streams[0])
        print("An inlet was successfully created")

        pre_cue_t = 2.0
        mi_t = 4.5
        pause_t = 2.5

        outlet.push_sample(x=["start_block"])
      Begin Routine:
        outlet.push_sample(x=["pre_run"])
  Routine wait_screen
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine pre_cue
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    PolygonComponent hor_line_precue
      fillColor = white
      lineWidth = 5
      shape = line
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pre_cue_t
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    PolygonComponent ver_line_precue
      fillColor = white
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pre_cue_t
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    CodeComponent code_precue
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["pre_cue"])
  Routine MI
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    ImageComponent image_mi
      image [set every repeat] = $pic_name
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mi_t
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    CodeComponent code_mi
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[class_mi])
        prob1=0
        prob2=0
        prob3=0
        prob4=0
      Each Frame:
        chunk, timestamps = inlet_classifier.pull_chunk()
        if chunk:
            chunk = np.transpose(chunk)
            last_sample = chunk[:,-1]
            print(last_sample)
            prob1 = last_sample[0]
            prob2 = last_sample[1]
            prob3 = last_sample[2]
            prob4 = last_sample[3]
    PolygonComponent polygon
      anchor = center-left
      fillColor = -1.0000, -1.0000, 0.0902
      pos = (-0.5, 0.3)
      shape = rectangle
      size [set every frame] = (prob1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mi_t
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    PolygonComponent polygon_2
      anchor = center-left
      fillColor = 0.6471, -0.1765, -0.7647
      pos [set every frame] = (-0.5+prob1, 0.3)
      shape = rectangle
      size [set every frame] = (prob2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mi_t
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    PolygonComponent polygon_3
      anchor = center-left
      fillColor = 0.3961, -0.7333, -0.7333
      pos [set every frame] = (-0.5+prob1+prob2, 0.3)
      shape = rectangle
      size [set every frame] = (prob3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mi_t
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    PolygonComponent polygon_4
      anchor = center-left
      fillColor = 0.9608, 0.9608, 0.6471
      pos [set every frame] = (-0.5+prob1+prob2+prob3, 0.3)
      shape = rectangle
      size [set every frame] = (prob4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mi_t
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  Routine pause
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    TextComponent text_pause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pause_t
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    CodeComponent code_pause
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["pause"])
  Routine run_break
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Run Finished
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine post_block
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    TextComponent text_post_run
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Block Finished. Yuhu!
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    TextComponent text_post_run_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Block Finished. Yuhu!
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    KeyboardComponent key_resp_end
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_post_block
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["post_block"])
Flow
  Routine pre_block
  LoopInitiator run loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine wait_screen
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = classes.csv
      loopType = fullRandom
      nReps = 5
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      conditions:
        [OrderedDict([('pic_name', 'pics/left_hand.JPG'), ('class_mi', 'left_hand')]),
        OrderedDict([('pic_name', 'pics/right_hand.JPG'), ('class_mi', 'right_hand')]),
        OrderedDict([('pic_name', 'pics/feet.JPG'), ('class_mi', 'feet')]),
        OrderedDict([('pic_name', 'pics/mental_singing.JPG'), ('class_mi', 'mental_singing')])]
      Routine pre_cue
      Routine MI
      Routine pause
    LoopTerminator trials
    Routine run_break
  LoopTerminator run
  Routine post_block
