PsychoPy2experiment version="2024.1.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Use version = 2024.1.2
  Window size (pixels) = [1536, 864]
  expName = online_paradigm
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine pre_block
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    TextComponent text_pre_block
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press space to start online measurement
    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_pre_block
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet, resolve_byprop, StreamInlet
        import numpy as np
        import pandas as pd
        import time
        import scipy.signal as signal

        info = StreamInfo(name='paradigm',type='Markers',channel_count=1,channel_format='string')
        outlet=StreamOutlet(info)
        print("looking for a classifier stream...")
        streams = resolve_byprop( 'name', 'ClassifierOutput', timeout=10)
        print(streams)
        inlet_classifier = StreamInlet(streams[0])
        print(inlet_classifier)
        print("An inlet was successfully created")
        fs = streams[0].nominal_srate()
        ch = streams[0].channel_count()
        print(ch)


        pre_cue_t = 2.0
        mi_t = 4.5
        pause_t = 2.5

        outlet.push_sample(x=["start_block"])
        file = 'classes.csv'
        df = pd.read_csv(file)
      Begin Routine:
        outlet.push_sample(x=["pre_run"])
        #initialize the moving average filter with initial condition
        # such that previous probabilities are 0.25

        length_of_window = 1 #second
        #fs = 2
        windowsize = int(length_of_window * fs)
        b = (1 / windowsize) * np.ones((windowsize, 1))
        b = b.flatten()
        init_z = np.ones((4,windowsize-1))*1/ch
        a = 1
        _vals, zi = signal.lfilter(b,a,init_z, zi=init_z)
  Routine wait_screen
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine pre_cue
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    PolygonComponent hor_line_precue
      fillColor = white
      lineWidth = 5
      shape = line
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pre_cue_t
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    PolygonComponent ver_line_precue
      fillColor = white
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pre_cue_t
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    CodeComponent code_precue
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["pre_cue"])
  Routine MI
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    ImageComponent image_mi
      image [set every repeat] = $pic_name
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mi_t
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    CodeComponent code_mi
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(x=[class_mi])
        cur_class_prob = 0.25 #just initialization
        cur_class = 0 #just initialization
        cur_col = [1.0000, -1.0000, -1.0000]#red
      Each Frame:
        chunk, timestamps = inlet_classifier.pull_chunk()
        if np.size(chunk) > 0:
            print(chunk)
            chunk = np.transpose(chunk)
            print(np.shape(chunk))
            cur_class = df[df['class_mi'] == class_mi].index.tolist()[0]
            #cur_class_prob = chunk[cur_class,-1]

            cur_class_probs, zi = signal.lfilter(b,a,chunk,axis=1, zi=zi)
            #print(cur_class_probs)

            cur_class_prob=cur_class_probs[cur_class,-1]

            if cur_class_prob > 0.5:
                cur_col=[-1.0000, 0.0039, -1.0000 ]#green
            else:
                cur_col = [1.0000, -1.0000, -1.0000]#red
            #time.sleep(1)
    PolygonComponent polygon_2
      anchor = center-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.5, 0.3)
      shape = rectangle
      size [set every frame] = (1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mi_t
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    PolygonComponent polygon_3
      anchor = center-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.5
      pos = (-0.5, 0.3)
      shape = rectangle
      size [set every frame] = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mi_t
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    PolygonComponent polygon
      anchor = center-left
      fillColor [set every frame] = $cur_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.5, 0.3)
      shape = rectangle
      size [set every frame] = (cur_class_prob, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mi_t
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  Routine pause
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    TextComponent text_pause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pause_t
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    CodeComponent code_pause
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["pause"])
  Routine run_break
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Run Finished
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine post_block
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    TextComponent text_post_run
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Block Finished. Yuhu!
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    TextComponent text_post_run_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Block Finished. Yuhu!
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    KeyboardComponent key_resp_end
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_post_block
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["post_block"])
Flow
  Routine pre_block
  LoopInitiator run loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine wait_screen
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $file
      loopType = fullRandom
      nReps = 5
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      conditions:
        [OrderedDict([('pic_name', 'pics/left_hand.JPG'), ('class_mi', 'left_hand')]),
        OrderedDict([('pic_name', 'pics/right_hand.JPG'), ('class_mi', 'right_hand')]),
        OrderedDict([('pic_name', 'pics/feet.JPG'), ('class_mi', 'feet')]),
        OrderedDict([('pic_name', 'pics/mental_singing.JPG'), ('class_mi', 'mental_singing')])]
      Routine pre_cue
      Routine MI
      Routine pause
    LoopTerminator trials
    Routine run_break
  LoopTerminator run
  Routine post_block
