PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = bci_racingteam
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine MI
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    ImageComponent image_mi
      image [set every repeat] = $pic_name
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mi_t
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    CodeComponent code_mi
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[class_mi])
  Routine pre_cue
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    PolygonComponent hor_line_precue
      fillColor = white
      lineWidth = 5
      shape = line
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pre_cue_t
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    PolygonComponent ver_line_precue
      fillColor = white
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pre_cue_t
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    CodeComponent code_precue
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["pre_cue"])
  Routine cue
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    PolygonComponent hor_line_cue
      fillColor = white
      lineWidth = 5
      shape = line
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cue_t
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    PolygonComponent ver_line_cue
      fillColor = white
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cue_t
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    ImageComponent image_cue
      image [set every repeat] = $pic_name
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cue_t
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    CodeComponent code_cue
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["cue"])
  Routine pause
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    TextComponent text_pause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pause_t
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    CodeComponent code_pause
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["pause"])
  Routine run_break
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Run Finished
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_screen
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine pre_block
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    TextComponent text_pre_block
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press any key to start ...
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    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_pre_block
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo(name='paradigm',type='Markers',channel_count=1,channel_format='string')
        outlet=StreamOutlet(info)

        pre_cue_t = 2.0
        mi_t = 4.5
        pause_t = 2.5

        outlet.push_sample(x=["start_block"])
      Begin Routine:
        outlet.push_sample(x=["pre_run"])
  Routine post_block
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    TextComponent text_post_run
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Block Finished. Yuhu!
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    KeyboardComponent key_resp_end
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_post_block
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=["post_block"])
Flow
  Routine pre_block
  LoopInitiator run loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine wait_screen
    LoopInitiator trial loopType="TrialHandler"
      conditionsFile = classes.csv
      loopType = fullRandom
      nReps = 5
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      conditions:
        [OrderedDict([('pic_name', 'pics/mental_singing.JPG'), ('class_mi', 'mental_singing')]),
        OrderedDict([('pic_name', 'pics/right_hand.JPG'), ('class_mi', 'right_hand')]),
        OrderedDict([('pic_name', 'pics/left_hand.JPG'), ('class_mi', 'left_hand')]),
        OrderedDict([('pic_name', 'pics/feet.JPG'), ('class_mi', 'feet')])]
      Routine pre_cue
      Routine MI
      Routine pause
    LoopTerminator trial
    Routine run_break
  LoopTerminator run
  Routine post_block
